PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/f_a1.jpg', 'images/f_a2.jpg', 'images/f_a3.jpg', 'images/f_a4.jpg', 'images/f_a5.jpg', 'images/f_a6.jpg', 'images/f_a7.jpg', 'images/f_a8.jpg', 'images/ftest_n1.jpg', 'images/ftest_n2.jpg', 'images/ftest_n3.jpg', 'images/ftest_n4.jpg', 'images/ftest_n5.jpg', 'images/ftest_n6.jpg', 'images/ftest_n7.jpg', 'images/ftest_n8.jpg', 'images/ftest_p1.jpg', 'images/ftest_p2.jpg', 'images/ftest_p3.jpg', 'images/ftest_p4.jpg', 'images/ftest_p5.jpg', 'images/ftest_p6.jpg', 'images/ftest_p7.jpg', 'images/ftest_p8.jpg', 'images/m_a1.jpg', 'images/m_a2.jpg', 'images/m_a3.jpg', 'images/m_a4.jpg', 'images/m_a5.jpg', 'images/m_a6.jpg', 'images/m_a7.jpg', 'images/m_a8.jpg', 'images/mtest_n1.jpg', 'images/mtest_n2.jpg', 'images/mtest_n3.jpg', 'images/mtest_n4.jpg', 'images/mtest_n5.jpg', 'images/mtest_n6.jpg', 'images/mtest_n7.jpg', 'images/mtest_n8.jpg', 'images/mtest_p1.jpg', 'images/mtest_p2.jpg', 'images/mtest_p3.jpg', 'images/mtest_p4.jpg', 'images/mtest_p5.jpg', 'images/mtest_p6.jpg', 'images/mtest_p7.jpg', 'images/mtest_p8.jpg', 'images/probedown.png', 'images/probeup.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = #ffffff
  expName = task2-5jan-v1
  logging level = debug
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Routines
  Routine fixcross
    CodeComponent jittering
      Code Type = Both
      Begin Experiment:
        # Set of values for the jittered inter-trial interval (ITI)
        iti = [0.2, 0.4, 0.6, 0.8]
        nBlocks = 96
        jitter = []

        # Create blocks of random jitter
        for block in range(nBlocks):
            # Append a random ample from the iti list
            jitter.append(list(np.random.choice(iti, size=len(iti), replace=False)))

        # Flatten nested list
        jitter = [jit for sublist in jitter for jit in sublist]
      Begin JS Experiment:
        // create function for shuffle on js
        function shuffle(array) {
          var currentIndex = array.length,  randomIndex;

          // While there remaining elements to shuffle...
          while (0 !== currentIndex) {

            // Pick a remaining element...
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;

            // And swap it with the current element.
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]];
          }

          return array;
        }

        // Array of negative and alternative photo file names (without directory and ext)
        naphotos = []
        for (var i = 1; i <= 8; i++) {
          naphotos.push('n' + i);
          naphotos.push('a' + i);
        }


        // Create blocks of randomised array of naphotos
        negalt = []
        for (let block = 0; block < 24; block++) {
          // Append a random selection, Array.from() typecasts each list into array
          negalt.push(Array.from(shuffle(naphotos)))
        }
        negalt = negalt.flat() //flatten list
        console.log(negalt)
        console.log(negalt.length)
        //final array of neg/alt photos (without directory and ext) named "negalt"


        ////////////////////////////
        // Set of values for the jittered inter-trial interval (ITI)
        iti = [0.2, 0.4, 0.6, 0.8]

        //Block of 16 iti values
        iti_16 = Array(4).fill(iti).flat();
        jitter = []

        for (let block = 0; block < 24; block++) {
          // Append a random block of 16, Array.from() typecasts each list into array
          jitter.push(Array.from(shuffle(iti_16)))
        }
        jitter = jitter.flat() //flatten list
        console.log(jitter)
        console.log(jitter.length)
        ////////////////////////////



        //creating ITI and tagging it such that each trial type has 2 of each ITI.
        iti_neg_8 = [0.2, 0.2, 0.4, 0.4, 0.6, 0.6, 0.8, 0.8]
        iti_alt_8 = [0.2, 0.2, 0.4, 0.4, 0.6, 0.6, 0.8, 0.8]
        iti_neg_192 = []
        iti_alt_192 = []
        for (let block = 0; block < 24; block++) {
          iti_neg_192.push(Array.from(shuffle(iti_neg_8)))
        }
        iti_neg_192 = iti_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          iti_alt_192.push(Array.from(shuffle(iti_alt_8)))
        }
        iti_alt_192 = iti_alt_192.flat()
        console.log(iti_neg_192)
        console.log(iti_neg_192.length)
        console.log(iti_alt_192)
        console.log(iti_alt_192.length)


        //full jitter_iti array
        jitter_iti = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           jitter_iti.push(iti_neg_192[k])
            k = k+1
          }
          else {
           jitter_iti.push(iti_alt_192[l])
            l = l+1
          }
        }
        jitter_iti = jitter_iti.flat()
        console.log(jitter_iti)
        console.log(jitter_iti.length)
    TextComponent fc
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter_iti[snapshot.thisN]
      text = +
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    CodeComponent log_fcjitter
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("FC_jitter", jitter_iti[snapshot.thisN]);
      Begin Routine:
        thisExp.addData("FC_jitter", jitter_iti[snapshot.thisN])
  Routine stimulus
    CodeComponent shuffle_pair
      Code Type = JS
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      Begin JS Experiment:
        // fetch participant ID
        participantID = expInfo['participant']; // e.g. 'm013', 'f123';

        //create partnerID
        if (participantID[0] == 'f'){
         partnerID = 'm' + participantID.substring(1)
        }
        else if (participantID[0] == 'F'){
         partnerID = 'm' + participantID.substring(1)
        }
        else partnerID = 'f' + participantID.substring(1)

        //create partner_gender
        participant_gender = participantID[0]
        if (participant_gender == 'f'){
         partner_gender = 'm'
        }
        else if (participant_gender == 'F'){
         partner_gender = 'm'
        }
        else partner_gender = 'f'


        // info on the folder name where the resources are stored and the file extension
        ext = '.jpg'
        directory = 'images/'


        // create the function for shuffle on js
        function shuffle(array) {
          var currentIndex = array.length,
            randomIndex;

          // While there remaining elements to shuffle...
          while (0 !== currentIndex) {

            // Pick a remaining element...
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;

            // And swap it with the current element.
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]
            ];
          }

          return array;
        }

        ////////////// NOTE: negalt code chunk shifted to jittering code///////////////

        // Array of positive photo file names (without directory and ext)
        posphotos = []
        pos_neg_8 = []
        pos_alt_8 = []
        for (var i = 1; i <= 8; i++) {
          pos_neg_8.push('p' + i);
          pos_alt_8.push('p' + i);
        }

        //creating posphotos and tagging it such that each block of 16 has one unique pairing of each trial type. i.e. p1 is with one neg and one alt.
        pos_neg_192 = []
        pos_alt_192 = []
        for (let block = 0; block < 24; block++) {
          pos_neg_192.push(Array.from(shuffle(pos_neg_8)))
        }
        pos_neg_192 = pos_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          pos_alt_192.push(Array.from(shuffle(pos_alt_8)))
        }
        pos_alt_192 = pos_alt_192.flat()
        console.log(pos_neg_192)
        console.log(pos_neg_192.length)
        console.log(pos_alt_192)
        console.log(pos_alt_192.length)


        //full positive array
        positive = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           positive.push(pos_neg_192[k])
            k = k+1
          }
          else {
           positive.push(pos_alt_192[l])
            l = l+1
          }
        }
        positive = positive.flat()
        console.log(positive)
        console.log(positive.length)
        //final array of positive photos (without directory and ext) is named "positive"


        //creating SOA and tagging it such that each trial type has half of each SOA.
        SOA_neg_8 = [0.5, 0.5, 0.5, 0.5, 1, 1, 1, 1]
        SOA_alt_8 = [0.5, 0.5, 0.5, 0.5, 1, 1, 1, 1]
        SOA_neg_192 = []
        SOA_alt_192 = []
        for (let block = 0; block < 24; block++) {
          SOA_neg_192.push(Array.from(shuffle(SOA_neg_8)))
        }
        SOA_neg_192 = SOA_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          SOA_alt_192.push(Array.from(shuffle(SOA_alt_8)))
        }
        SOA_alt_192 = SOA_alt_192.flat()
        console.log(SOA_neg_192)
        console.log(SOA_neg_192.length)
        console.log(SOA_alt_192)
        console.log(SOA_alt_192.length)


        //full SOA array
        SOA = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           SOA.push(SOA_neg_192[k])
            k = k+1
          }
          else {
           SOA.push(SOA_alt_192[l])
            l = l+1
          }
        }
        SOA = SOA.flat()
        console.log(SOA)
        console.log(SOA.length)

        //creating pos_leftorright and tagging it such that each trial type has half of each pos_leftorright.
        pos_position_neg_8 = [-0.4, -0.4, -0.4, -0.4, 0.4, 0.4, 0.4, 0.4]
        pos_position_alt_8 = [-0.4, -0.4, -0.4, -0.4, 0.4, 0.4, 0.4, 0.4]
        pos_position_neg_192 = []
        pos_position_alt_192 = []
        for (let block = 0; block < 24; block++) {
          pos_position_neg_192.push(Array.from(shuffle(pos_position_neg_8)))
        }
        pos_position_neg_192 = pos_position_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          pos_position_alt_192.push(Array.from(shuffle(pos_position_alt_8)))
        }
        pos_position_alt_192 = pos_position_alt_192.flat()
        console.log(pos_position_neg_192)
        console.log(pos_position_neg_192.length)
        console.log(pos_position_alt_192)
        console.log(pos_position_alt_192.length)

        //full pos_leftorright array
        pos_leftorright = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           pos_leftorright.push(pos_position_neg_192[k])
            k = k+1
          }
          else {
           pos_leftorright.push(pos_position_alt_192[l])
            l = l+1
          }
        }
        pos_leftorright = pos_leftorright.flat()
        console.log(pos_leftorright)
        console.log(pos_leftorright.length)



        //creating na_leftorright array. basically when pos_leftorright = 0.4, then na_leftorright = -0.4 and vice versa
        na_leftorright = []
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (pos_leftorright[j] == 0.4) {
           na_leftorright.push(-0.4)
          }
          else {
           na_leftorright.push(0.4)
          }
        }
        na_leftorright = na_leftorright.flat()
        console.log(na_leftorright)
        console.log(na_leftorright.length)


        positivefilepaths = []
        for (var i = 0; i <= 383; i++) {
          positivefilepaths.push(directory + partnerID + '_' + positive[i] + ext);
        }
        console.log(positivefilepaths)

        //final array of neg/alt photo file paths with directory and ext named "negaltfilepaths"
        negaltfilepaths = []
        for (var i = 0; i <= 383; i++) {
         if (negalt[i][0] == 'n') {
           negaltfilepaths.push(directory + partnerID + '_' + negalt[i] + ext);
          }
          else {
           negaltfilepaths.push(directory + partner_gender + '_' + negalt[i] + ext);
          }

        }
        console.log(negaltfilepaths)
    ImageComponent positiveimage
      image [set every repeat] = $positivefilepaths[snapshot.thisN]
      pos [set every repeat] = $[pos_leftorright[snapshot.thisN], 0]
      saveStartStop = False
      size = [0.39,0.5]
      startVal [time (s)] = 0.0
      stopVal [time (s)] = SOA[snapshot.thisN]
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    ImageComponent negaltimage
      image [set every repeat] = $negaltfilepaths[snapshot.thisN]
      pos [set every repeat] = $[na_leftorright[snapshot.thisN], 0]
      saveStartStop = False
      size = [0.39, 0.5]
      startVal [time (s)] = 0.0
      stopVal [time (s)] = SOA[snapshot.thisN]
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    CodeComponent log_imagename
      Code Type = JS
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      Begin JS Routine:
        psychoJS.experiment.addData("posimage", positive[snapshot.thisN]);
        psychoJS.experiment.addData("negaltimage", negalt[snapshot.thisN]);
        psychoJS.experiment.addData("SOA", SOA[snapshot.thisN]);
        psychoJS.experiment.addData("pos_leftorright", pos_leftorright[snapshot.thisN]);
        psychoJS.experiment.addData("na_leftorright", na_leftorright[snapshot.thisN]);
  Routine probe_resp
    CodeComponent shuffle_probe
      Code Type = JS
      Begin JS Experiment:
        // create the function for shuffle on js
        function shuffle(array) {
          var currentIndex = array.length,
            randomIndex;

          // While there remaining elements to shuffle...
          while (0 !== currentIndex) {

            // Pick a remaining element...
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;

            // And swap it with the current element.
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]
            ];
          }

          return array;
        }

        //creating probe_leftorright and tagging it such that each trial type has half of each probe_leftorright.
        probe_position_neg_8 = [-0.4, -0.4, -0.4, -0.4, 0.4, 0.4, 0.4, 0.4]
        probe_position_alt_8 = [-0.4, -0.4, -0.4, -0.4, 0.4, 0.4, 0.4, 0.4]
        probe_position_neg_192 = []
        probe_position_alt_192 = []
        for (let block = 0; block < 24; block++) {
          probe_position_neg_192.push(Array.from(shuffle(probe_position_neg_8)))
        }
        probe_position_neg_192 = probe_position_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          probe_position_alt_192.push(Array.from(shuffle(probe_position_alt_8)))
        }
        probe_position_alt_192 = probe_position_alt_192.flat()
        console.log(probe_position_neg_192)
        console.log(probe_position_neg_192.length)
        console.log(probe_position_alt_192)
        console.log(probe_position_alt_192.length)

        //full probe_leftorright array
        probe_leftorright = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           probe_leftorright.push(probe_position_neg_192[k])
            k = k+1
          }
          else {
           probe_leftorright.push(probe_position_alt_192[l])
            l = l+1
          }
        }
        probe_leftorright = probe_leftorright.flat()
        console.log(probe_leftorright)
        console.log(probe_leftorright.length)

        /////////////////////////////
        /////////////////////////////
        //creating probe_upordown and tagging it such that each trial type has half of each probe_upordown.
        probe_symbol_neg_8 = ['up', 'up', 'up', 'up', 'down', 'down', 'down', 'down']
        probe_symbol_alt_8 = ['up', 'up', 'up', 'up', 'down', 'down', 'down', 'down']
        probe_symbol_neg_192 = []
        probe_symbol_alt_192 = []
        for (let block = 0; block < 24; block++) {
          probe_symbol_neg_192.push(Array.from(shuffle(probe_symbol_neg_8)))
        }
        probe_symbol_neg_192 = probe_symbol_neg_192.flat()
        for (let block = 0; block < 24; block++) {
          probe_symbol_alt_192.push(Array.from(shuffle(probe_symbol_alt_8)))
        }
        probe_symbol_alt_192 = probe_symbol_alt_192.flat()
        console.log(probe_symbol_neg_192)
        console.log(probe_symbol_neg_192.length)
        console.log(probe_symbol_alt_192)
        console.log(probe_symbol_alt_192.length)

        //full probe_upordown array
        probe_upordown_short = []
        var k = 0 //helper index for negative
        var l = 0 //helper index for alternative
        for (var j = 0; j <= 383; j++) {
          // Append a random selection, Array.from() typecasts each list into array
          if (negalt[j][0] == 'n') {
           probe_upordown_short.push(probe_symbol_neg_192[k])
            k = k+1
          }
          else {
           probe_upordown_short.push(probe_symbol_alt_192[l])
            l = l+1
          }
        }
        probe_upordown_short = probe_upordown_short.flat()
        console.log(probe_upordown_short)
        console.log(probe_upordown_short.length)

        //creating corrAns array, tagging to probe_upordown
        corrAns = probe_upordown_short

        probe_upordown = []
        for (var i = 0; i <= 383; i++) {
          probe_upordown.push('images/probe' + probe_upordown_short[i] + '.png');
        }
        console.log(probe_upordown)
    ImageComponent probes
      image [set every repeat] = $probe_upordown[snapshot.thisN]
      pos [set every repeat] = $[probe_leftorright[snapshot.thisN],0]
      saveStartStop = False
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $corrAns[snapshot.thisN]
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent log_probe_conditions
      Code Type = JS
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      Begin JS Routine:
        psychoJS.experiment.addData("probe_leftorright", probe_leftorright[snapshot.thisN]);
        psychoJS.experiment.addData("probe_upordown", probe_upordown_short[snapshot.thisN]);
  Routine instr_practice
    TextComponent instrText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instructions:
        You will be shown an image of an arrow either pointing up (“ᐃ”) or else pointing down (“ᐁ”). All you need to do is use the keys on your keyboard to indicate whether it is pointing up or down.

        On each trial you will be briefly shown a plus sign (+), which you should look at to bring your attention to the center of the screen.

        Then as soon as you see an image of an arrow, quickly press the UP arrow key if the image is pointing up, and the DOWN arrow key if the image is pointing down.

        To start a series of practice trials, just click the button below and then immediately place one of your fingers on the UP arrow key and one on the DOWN arrow key so you can answer quickly.

        When you're ready to continue, click the SPACE button.
    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_actual
    TextComponent instrText_2
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we are going to start with the real trials. On each trial you will see some faces, which you should try to ignore. Instead, just focus on the arrows as before: As soon as you see an image of an arrow, quickly press the UP arrow key if the image is pointing up, and the DOWN arrow key if the image is pointing down.

        BE ACCURATE - make sure you click the right button.

        To start these real trials, click the SPACE button.
    KeyboardComponent instr_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixcross_prac
    TextComponent fc_prac
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine probe_resp_prac
    TextComponent probe_prac
      color = lightgrey
      letterHeight = 0.03
      pos [set every repeat] = $[probe_leftorright_trial, 0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $probe_upordown_trial
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    KeyboardComponent key_resp_prac
      allowedKeys = 'up','down'
      correctAns = $corrAns_trial
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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  Routine feedback_prac
    CodeComponent setMsg
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_prac.corr:
            msg = "Correct! "
            msgColor = "green"
        else:
            msg = "Oops, that was wrong."
            msgColor = "red"
    TextComponent feedbackText
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
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  Routine reminderID
    TextComponent reminderIDText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before we begin, please ensure that you typed your PARTNER’s participant ID in the pop-up box before this. For example, if your ID is “f456”, please type in “m456” and vice versa. If you have typed another ID, please close this tab, exit the experiment and re-enter with your partner’s ID.

        If you have correctly typed in your partner’s ID, click the SPACE button.
    KeyboardComponent reminderID_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break25
    CodeComponent break25_code
      Code Type = Both
      Begin JS Routine:
        if ((snapshot.thisN !== 95)) {
            continueRoutine = false;
        }
      Begin Routine:
        if trials.thisN != 95:
            continueRoutine = False
    TextComponent break25_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You’ve completed 25% of the trials. You may now take a break before resuming.

        Press the SPACE bar when you’re ready to start the next block of trials.

        If you don’t press the SPACE bar, the next block of trials will start automatically in 1 minute.
    KeyboardComponent break25_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine break50
    CodeComponent break50_code
      Code Type = Both
      Begin JS Routine:
        if ((snapshot.thisN !== 191)) {
            continueRoutine = false;
        }
      Begin Routine:
        if trials.thisN != 191:
            continueRoutine = False
    TextComponent break50_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You’ve completed 50% of the trials. You may now take a break before resuming.

        Press the SPACE bar when you’re ready to start the next block of trials.

        If you don’t press the SPACE bar, the next block of trials will start automatically in 1 minute.
    KeyboardComponent break50_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine break75
    CodeComponent break75_code
      Code Type = Both
      Begin JS Routine:
        if ((snapshot.thisN !== 287)) {
            continueRoutine = false;
        }
      Begin Routine:
        if trials.thisN != 287:
            continueRoutine = False
    TextComponent break75_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You’ve completed 75% of the trials. You may now take a break before resuming.

        Press the SPACE bar when you’re ready to start the next block of trials.

        If you don’t press the SPACE bar, the next block of trials will start automatically in 1 minute.
    KeyboardComponent break75_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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Flow
  Routine instr_practice
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = conditions_practice_trial.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'probe_leftorright_trial': -0.5, 'probe_upordown_trial': 'ᐁ', 'corrAns_trial': 'down'},
      {'probe_leftorright_trial': 0.5, 'probe_upordown_trial': 'ᐁ', 'corrAns_trial': 'down'},
      {'probe_leftorright_trial': -0.5, 'probe_upordown_trial': 'ᐃ', 'corrAns_trial': 'up'},
      {'probe_leftorright_trial': 0.5, 'probe_upordown_trial': 'ᐃ', 'corrAns_trial': 'up'}]
    Routine fixcross_prac
    Routine probe_resp_prac
    Routine feedback_prac
  LoopTerminator practice_trials
  Routine instr_actual
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 384
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    Routine fixcross
    Routine stimulus
    Routine probe_resp
    Routine break25
    Routine break50
    Routine break75
  LoopTerminator trials
